PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  color = 1.0000, 1.0000, 1.0000
  expName = смиролор
  keyboardBackend = PsychToolbox
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Routines
  Routine trial
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    KeyboardComponent key_resp
      allowedKeys = 's','l'
      forceEndRoutine = True
      startVal [time (s)] = 0.65
      store = all keys
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    ImageComponent image
      image [set every repeat] = $Stimul
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent text_2
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.65
      text = ?
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  Routine instruction
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    TextComponent instruction_text
      color = 0, 0, 0
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        У цьому експерименті Вам буде протягом короткого часу представлене коло певного кольору. Після демонстрації фігури на екрані з'явиться знак питяння.
        Натисніть'S', якщо вважаєте,що коло було ближче до СИНЬОГО кольору.
        Натисніть 'L', якщо вважаєте,що коло було ближче до ФІОЛЕТОВОГО кольору.
        Будь ласка намагайтесь відповідати швидко і чітко.
        Натисніть будь яку клавішу,щоб розпочати
    KeyboardComponent stop_instruction
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = nothing
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  Routine Pause
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    TextComponent text
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = Вітаємо! Ви пройшли перший блок. Залишилось всього сім. У Вас є час перепочити 20 секунд.
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    TextComponent Text_continius
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 20.0
      text = Натисніть пробіл, щоб продовжити
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    KeyboardComponent key_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 20.0
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  Routine Exit
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    ImageComponent image_2
      color = -1.0000, -1.0000, -1.0000
      image = кар8.jpg
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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  Routine Pause2
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    TextComponent Text_pause2
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = Вітаємо! Ви пройшли другий блок. Залишилось всього шість. У Вас є час перепочити 20 секунд.
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    TextComponent Text_cont_pause2
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 20.0
      text = Натисніть пробіл, щоб продовжити
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    KeyboardComponent key_cont_pause2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 20.0
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  Routine Pause3
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    TextComponent Text_pause3
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = Вітаємо! Ви пройшли третій блок. Залишилось всього п'ять. У Вас є час перепочити 20 секунд.
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    TextComponent Text_cont_pause3
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 20.0
      text = Натисніть пробіл, щоб продовжити
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    KeyboardComponent key_cont_pause3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 20.0
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  Routine Pause4
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    TextComponent Text_pause4
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = Вітаємо! Ви пройшли четвертий блок. Залишилось всього чотири. У Вас є час перепочити 20 секунд.
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    TextComponent Text_cont_pause4
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 20.0
      text = Натисніть пробіл, щоб продовжити
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    KeyboardComponent key_cont_pause4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 20.0
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  Routine Pause5
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    TextComponent Text_pause5
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = Вітаємо! Ви пройшли п'ятий блок. Залишилось всього три. У Вас є час перепочити 20 секунд.
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    TextComponent Text_cont_pause5
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 20.0
      text = Натисніть пробіл, щоб продовжити
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    KeyboardComponent key_cont_pause5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 20.0
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  Routine Pause6
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    TextComponent Text_pause6
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = Вітаємо! Ви пройшли шостий блок. Залишилось всього два. У Вас є час перепочити 20 секунд.
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    TextComponent Text_cont_pause6
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 20.0
      text = Натисніть пробіл, щоб продовжити
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    KeyboardComponent key_cont_pause6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 20.0
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  Routine Pause7
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    TextComponent Text_cont_pause7
      letterHeight = 0.05
      startVal [time (s)] = 20.0
      text = Натисніть пробіл, щоб продовжити
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    KeyboardComponent key_cont_pause7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 20.0
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    TextComponent text_pause_7
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = Вітаємо! Ви пройшли сьомий блок. Залишився всього один. У Вас є час перепочити 20 секунд.
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Flow
  Routine instruction
  LoopInitiator trials_1 loopType="TrialHandler"
    conditionsFile = Stimul_1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Name': 'Purple 1', 'Stimul': 'К1', 'Color': 'Purple'},
      {'Name': 'Purple 2', 'Stimul': 'К2', 'Color': 'Purple'},
      {'Name': 'Purple 3', 'Stimul': 'К3', 'Color': 'Purple'},
      {'Name': 'Purple 4', 'Stimul': 'К4', 'Color': 'Purple'},
      {'Name': 'Purple 5', 'Stimul': 'К5', 'Color': 'Purple'},
      {'Name': 'Purple 6', 'Stimul': 'К6', 'Color': 'Purple'},
      {'Name': 'Purple 7', 'Stimul': 'К7', 'Color': 'Purple'},
      {'Name': 'Purple 8', 'Stimul': 'К8', 'Color': 'Purple'},
      {'Name': 'Purple 9', 'Stimul': 'К9', 'Color': 'Purple'},
      {'Name': 'Purple 10', 'Stimul': 'К10', 'Color': 'Purple'},
      {'Name': 'Purple 11', 'Stimul': 'К11', 'Color': 'Purple'},
      {'Name': 'Purple 12', 'Stimul': 'К12', 'Color': 'Purple'},
      {'Name': 'Purple 13', 'Stimul': 'К13', 'Color': 'Purple'},
      {'Name': 'Purple 14', 'Stimul': 'К14', 'Color': 'Purple'},
      {'Name': 'Purple 15', 'Stimul': 'К15', 'Color': 'Purple'},
      {'Name': 'Purple 16', 'Stimul': 'К16', 'Color': 'Purple'},
      {'Name': 'Purple 17', 'Stimul': 'К17', 'Color': 'Purple'},
      {'Name': 'Purple 18', 'Stimul': 'К18', 'Color': 'Purple'},
      {'Name': 'Purple 19', 'Stimul': 'К19', 'Color': 'Purple'},
      {'Name': 'Purple 20', 'Stimul': 'К20', 'Color': 'Purple'},
      {'Name': 'Purple 21', 'Stimul': 'К21', 'Color': 'Purple'},
      {'Name': 'Purple 22', 'Stimul': 'К22', 'Color': 'Purple'},
      {'Name': 'Purple 23', 'Stimul': 'К23', 'Color': 'Purple'},
      {'Name': 'Purple 24', 'Stimul': 'К24', 'Color': 'Purple'},
      {'Name': 'Purple 25', 'Stimul': 'К25', 'Color': 'Purple'},
      {'Name': 'Purple 26', 'Stimul': 'К26', 'Color': 'Purple'}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
    Routine trial
  LoopTerminator trials_1
  Routine Pause
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = Stimul_2.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine trial
  LoopTerminator trials_2
  Routine Pause2
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = Stimul_3.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Name': 'Purple 1', 'Stimul': 'К1', 'Color': 'Purple'},
      {'Name': 'Purple 2', 'Stimul': 'К2', 'Color': 'Purple'},
      {'Name': 'Purple 3', 'Stimul': 'К3', 'Color': 'Purple'},
      {'Name': 'Purple 7', 'Stimul': 'К7', 'Color': 'Purple'},
      {'Name': 'Purple 8', 'Stimul': 'К8', 'Color': 'Purple'},
      {'Name': 'Purple 9', 'Stimul': 'К9', 'Color': 'Purple'},
      {'Name': 'Purple 10', 'Stimul': 'К10', 'Color': 'Purple'},
      {'Name': 'Purple 11', 'Stimul': 'К11', 'Color': 'Purple'},
      {'Name': 'Purple 12', 'Stimul': 'К12', 'Color': 'Purple'},
      {'Name': 'Purple 16', 'Stimul': 'К16', 'Color': 'Purple'},
      {'Name': 'Purple 17', 'Stimul': 'К17', 'Color': 'Purple'},
      {'Name': 'Purple 18', 'Stimul': 'К18', 'Color': 'Purple'},
      {'Name': 'Purple 19', 'Stimul': 'К19', 'Color': 'Purple'},
      {'Name': 'Purple 20', 'Stimul': 'К20', 'Color': 'Purple'},
      {'Name': 'Purple 21', 'Stimul': 'К21', 'Color': 'Purple'},
      {'Name': 'Purple 22', 'Stimul': 'К22', 'Color': 'Purple'},
      {'Name': 'Purple 23', 'Stimul': 'К23', 'Color': 'Purple'},
      {'Name': 'Purple 24', 'Stimul': 'К24', 'Color': 'Purple'},
      {'Name': 'Purple 25', 'Stimul': 'К25', 'Color': 'Purple'},
      {'Name': 'Purple 26', 'Stimul': 'К26', 'Color': 'Purple'},
      {'Name': 'Purple 27', 'Stimul': 'К27', 'Color': 'Purple'},
      {'Name': 'Purple 28', 'Stimul': 'К28', 'Color': 'Purple'},
      {'Name': 'Purple 29', 'Stimul': 'К29', 'Color': 'Purple'},
      {'Name': 'Purple 33', 'Stimul': 'К33', 'Color': 'Purple'},
      {'Name': 'Purple 34', 'Stimul': 'К34', 'Color': 'Purple'},
      {'Name': 'Purple 35', 'Stimul': 'К35', 'Color': 'Purple'}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
    Routine trial
  LoopTerminator trials_3
  Routine Pause3
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = Stimul_4.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Name': 'Purple 1', 'Stimul': 'К1', 'Color': 'Purple'},
      {'Name': 'Purple 2', 'Stimul': 'К2', 'Color': 'Purple'},
      {'Name': 'Purple 9', 'Stimul': 'К9', 'Color': 'Purple'},
      {'Name': 'Purple 10', 'Stimul': 'К10', 'Color': 'Purple'},
      {'Name': 'Purple 11', 'Stimul': 'К11', 'Color': 'Purple'},
      {'Name': 'Purple 12', 'Stimul': 'К12', 'Color': 'Purple'},
      {'Name': 'Purple 16', 'Stimul': 'К16', 'Color': 'Purple'},
      {'Name': 'Purple 17', 'Stimul': 'К17', 'Color': 'Purple'},
      {'Name': 'Purple 18', 'Stimul': 'К18', 'Color': 'Purple'},
      {'Name': 'Purple 19', 'Stimul': 'К19', 'Color': 'Purple'},
      {'Name': 'Purple 26', 'Stimul': 'К26', 'Color': 'Purple'},
      {'Name': 'Purple 27', 'Stimul': 'К27', 'Color': 'Purple'},
      {'Name': 'Purple 28', 'Stimul': 'К28', 'Color': 'Purple'},
      {'Name': 'Purple 29', 'Stimul': 'К29', 'Color': 'Purple'},
      {'Name': 'Purple 33', 'Stimul': 'К33', 'Color': 'Purple'},
      {'Name': 'Purple 34', 'Stimul': 'К34', 'Color': 'Purple'},
      {'Name': 'Purple 35', 'Stimul': 'К35', 'Color': 'Purple'},
      {'Name': 'Purple 36', 'Stimul': 'К36', 'Color': 'Purple'},
      {'Name': 'Purple 37', 'Stimul': 'К37', 'Color': 'Purple'},
      {'Name': 'Purple 38', 'Stimul': 'К38', 'Color': 'Purple'},
      {'Name': 'Purple 43', 'Stimul': 'К43', 'Color': 'Purple'},
      {'Name': 'Purple 44', 'Stimul': 'К44', 'Color': 'Purple'},
      {'Name': 'Purple 45', 'Stimul': 'К45', 'Color': 'Purple'},
      {'Name': 'Purple 46', 'Stimul': 'К46', 'Color': 'Purple'},
      {'Name': 'Purple 47', 'Stimul': 'К47', 'Color': 'Purple'},
      {'Name': 'Purple 48', 'Stimul': 'К48', 'Color': 'Purple'}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
    Routine trial
  LoopTerminator trials_4
  Routine Pause4
  LoopInitiator trials_5 loopType="TrialHandler"
    conditionsFile = Stimul_5.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Name': 'Purple 1', 'Stimul': 'К1', 'Color': 'Purple'},
      {'Name': 'Purple 10', 'Stimul': 'К10', 'Color': 'Purple'},
      {'Name': 'Purple 11', 'Stimul': 'К11', 'Color': 'Purple'},
      {'Name': 'Purple 12', 'Stimul': 'К12', 'Color': 'Purple'},
      {'Name': 'Purple 18', 'Stimul': 'К18', 'Color': 'Purple'},
      {'Name': 'Purple 19', 'Stimul': 'К19', 'Color': 'Purple'},
      {'Name': 'Purple 26', 'Stimul': 'К26', 'Color': 'Purple'},
      {'Name': 'Purple 27', 'Stimul': 'К27', 'Color': 'Purple'},
      {'Name': 'Purple 28', 'Stimul': 'К28', 'Color': 'Purple'},
      {'Name': 'Purple 29', 'Stimul': 'К29', 'Color': 'Purple'},
      {'Name': 'Purple 37', 'Stimul': 'К37', 'Color': 'Purple'},
      {'Name': 'Purple 38', 'Stimul': 'К38', 'Color': 'Purple'},
      {'Name': 'Purple 43', 'Stimul': 'К43', 'Color': 'Purple'},
      {'Name': 'Purple 44', 'Stimul': 'К44', 'Color': 'Purple'},
      {'Name': 'Purple 45', 'Stimul': 'К45', 'Color': 'Purple'},
      {'Name': 'Purple 50', 'Stimul': 'К50', 'Color': 'Purple'},
      {'Name': 'Blue 1', 'Stimul': 'К52', 'Color': 'Blue'},
      {'Name': 'Blue 2', 'Stimul': 'К53', 'Color': 'Blue'},
      {'Name': 'Blue 3', 'Stimul': 'К54', 'Color': 'Blue'},
      {'Name': 'Blue 4', 'Stimul': 'К55', 'Color': 'Blue'},
      {'Name': 'Blue 5', 'Stimul': 'К56', 'Color': 'Blue'},
      {'Name': 'Blue 6', 'Stimul': 'К57', 'Color': 'Blue'},
      {'Name': 'Blue 7', 'Stimul': 'К58', 'Color': 'Blue'},
      {'Name': 'Blue 8', 'Stimul': 'К59', 'Color': 'Blue'},
      {'Name': 'Blue 9', 'Stimul': 'К60', 'Color': 'Blue'},
      {'Name': 'Blue 10', 'Stimul': 'К61', 'Color': 'Blue'},
      {'Name': 'Blue 11', 'Stimul': 'К62', 'Color': 'Blue'}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
    Routine trial
  LoopTerminator trials_5
  Routine Pause5
  LoopInitiator trials_6 loopType="TrialHandler"
    conditionsFile = Stimul_6.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine trial
  LoopTerminator trials_6
  Routine Pause6
  LoopInitiator trials_7 loopType="TrialHandler"
    conditionsFile = Stimul_7.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Name': 'Purple 1', 'Stimul': 'К1', 'Color': 'Purple'},
      {'Name': 'Purple 12', 'Stimul': 'К12', 'Color': 'Purple'},
      {'Name': 'Purple 18', 'Stimul': 'К18', 'Color': 'Purple'},
      {'Name': 'Purple 37', 'Stimul': 'К37', 'Color': 'Purple'},
      {'Name': 'Purple 38', 'Stimul': 'К38', 'Color': 'Purple'},
      {'Name': 'Purple 45', 'Stimul': 'К45', 'Color': 'Purple'},
      {'Name': 'Blue 1', 'Stimul': 'К52', 'Color': 'Blue'},
      {'Name': 'Blue 2', 'Stimul': 'К53', 'Color': 'Blue'},
      {'Name': 'Blue 3', 'Stimul': 'К54', 'Color': 'Blue'},
      {'Name': 'Blue 4', 'Stimul': 'К55', 'Color': 'Blue'},
      {'Name': 'Blue 5', 'Stimul': 'К56', 'Color': 'Blue'},
      {'Name': 'Blue 6', 'Stimul': 'К57', 'Color': 'Blue'},
      {'Name': 'Blue 7', 'Stimul': 'К58', 'Color': 'Blue'},
      {'Name': 'Blue 8', 'Stimul': 'К59', 'Color': 'Blue'},
      {'Name': 'Blue 9', 'Stimul': 'К60', 'Color': 'Blue'},
      {'Name': 'Blue 10', 'Stimul': 'К61', 'Color': 'Blue'},
      {'Name': 'Blue 11', 'Stimul': 'К62', 'Color': 'Blue'},
      {'Name': 'Blue 12', 'Stimul': 'К63', 'Color': 'Blue'},
      {'Name': 'Blue 13', 'Stimul': 'К64', 'Color': 'Blue'},
      {'Name': 'Blue 14', 'Stimul': 'К65', 'Color': 'Blue'},
      {'Name': 'Blue 15', 'Stimul': 'К66', 'Color': 'Blue'},
      {'Name': 'Blue 16', 'Stimul': 'К67', 'Color': 'Blue'},
      {'Name': 'Blue 17', 'Stimul': 'К68', 'Color': 'Blue'},
      {'Name': 'Blue 18', 'Stimul': 'К69', 'Color': 'Blue'},
      {'Name': 'Blue 19', 'Stimul': 'К70', 'Color': 'Blue'},
      {'Name': 'Blue 20', 'Stimul': 'К71', 'Color': 'Blue'},
      {'Name': 'Blue 21', 'Stimul': 'К72', 'Color': 'Blue'},
      {'Name': 'Blue 22', 'Stimul': 'К73', 'Color': 'Blue'}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
    Routine trial
  LoopTerminator trials_7
  Routine Pause7
  LoopInitiator trials_8 loopType="TrialHandler"
    conditionsFile = Stimul_8.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine trial
  LoopTerminator trials_8
  Routine Exit
