PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  color = 1.0000, 1.0000, 1.0000
  expName = смиролор
  keyboardBackend = PsychToolbox
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Routines
  Routine trial
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    KeyboardComponent key_resp
      allowedKeys = 's','l'
      forceEndRoutine = True
      startVal [time (s)] = 0.65
      store = all keys
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    ImageComponent image
      image [set every repeat] = $Stimul
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent text_2
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.65
      text = ?
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  Routine instruction
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    TextComponent instruction_text
      color = 0, 0, 0
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        У цьому експерименті Вам буде протягом короткого часу представлене коло певного кольору. Після демонстрації фігури на екрані з'явиться знак питяння.
        Натисніть'S', якщо вважаєте,що коло було ближче до СИНЬОГО кольору.
        Натисніть 'L', якщо вважаєте,що коло було ближче до ФІОЛЕТОВОГО кольору.
        Будь ласка намагайтесь відповідати швидко і чітко.
        Натисніть будь яку клавішу,щоб розпочати
    KeyboardComponent stop_instruction
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = nothing
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  Routine Pause
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    TextComponent text
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = Вітаємо! Ви пройшли перший блок. Залишилось всього сім. У Вас є час перепочити 20 секунд.
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    TextComponent Text_continius
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 20.0
      text = Натисніть пробіл, щоб продовжити
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    KeyboardComponent key_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 20.0
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  Routine Exit
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    TextComponent text_3
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text = Дуже дякуємо за те, що прийняли участь у нашому експерименті! Ващ приділений час має велике значення для результатів дослідження!
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  Routine Pause2
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    TextComponent Text_pause2
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = Вітаємо! Ви пройшли другий блок. Залишилось всього шість. У Вас є час перепочити 20 секунд.
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    TextComponent Text_cont_pause2
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 20.0
      text = Натисніть пробіл, щоб продовжити
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    KeyboardComponent key_cont_pause2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 20.0
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  Routine Pause3
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    TextComponent Text_pause3
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = Вітаємо! Ви пройшли третій блок. Залишилось всього п'ять. У Вас є час перепочити 20 секунд.
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    TextComponent Text_cont_pause3
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 20.0
      text = Натисніть пробіл, щоб продовжити
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    KeyboardComponent key_cont_pause3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 20.0
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  Routine Pause4
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    TextComponent Text_pause4
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = Вітаємо! Ви пройшли четвертий блок. Залишилось всього чотири. У Вас є час перепочити 20 секунд.
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    TextComponent Text_cont_pause4
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 20.0
      text = Натисніть пробіл, щоб продовжити
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    KeyboardComponent key_cont_pause4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 20.0
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  Routine Pause5
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    TextComponent Text_pause5
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = Вітаємо! Ви пройшли п'ятий блок. Залишилось всього три. У Вас є час перепочити 20 секунд.
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    TextComponent Text_cont_pause5
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 20.0
      text = Натисніть пробіл, щоб продовжити
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    KeyboardComponent key_cont_pause5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 20.0
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  Routine Pause6
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    TextComponent Text_pause6
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = Вітаємо! Ви пройшли шостий блок. Залишилось всього два. У Вас є час перепочити 20 секунд.
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    TextComponent Text_cont_pause6
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 20.0
      text = Натисніть пробіл, щоб продовжити
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    KeyboardComponent key_cont_pause6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 20.0
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  Routine Pause7
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    TextComponent Text_cont_pause7
      letterHeight = 0.05
      startVal [time (s)] = 20.0
      text = Натисніть пробіл, щоб продовжити
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    KeyboardComponent key_cont_pause7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 20.0
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    TextComponent text_pause_7
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = Вітаємо! Ви пройшли сьомий блок. Залишився всього один. У Вас є час перепочити 20 секунд.
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Flow
  Routine instruction
  LoopInitiator trials_1 loopType="TrialHandler"
    conditionsFile = Stimul_1_1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Name': 'Purple 1', 'Stimul': 'static\\К1.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 2', 'Stimul': 'static\\К2.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 3', 'Stimul': 'static\\К3.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 4', 'Stimul': 'static\\К4.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 5', 'Stimul': 'static\\К5.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 6', 'Stimul': 'static\\К6.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 7', 'Stimul': 'static\\К7.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 8', 'Stimul': 'static\\К8.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 9', 'Stimul': 'static\\К9.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 10', 'Stimul': 'static\\К10.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 11', 'Stimul': 'static\\К11.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 12', 'Stimul': 'static\\К12.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 13', 'Stimul': 'static\\К13.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 14', 'Stimul': 'static\\К14.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 15', 'Stimul': 'static\\К15.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 16', 'Stimul': 'static\\К16.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 17', 'Stimul': 'static\\К17.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 18', 'Stimul': 'static\\К18.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 19', 'Stimul': 'static\\К19.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 20', 'Stimul': 'static\\К20.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 21', 'Stimul': 'static\\К21.jpg', 'Color': 'Purple'}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
    Routine trial
  LoopTerminator trials_1
  Routine Pause
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = Stimul_2_1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Name': 'Purple 1', 'Stimul': 'static\\К1.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 2', 'Stimul': 'static\\К2.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 3', 'Stimul': 'static\\К3.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 4', 'Stimul': 'static\\К4.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 5', 'Stimul': 'static\\К5.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 6', 'Stimul': 'static\\К6.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 7', 'Stimul': 'static\\К7.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 8', 'Stimul': 'static\\К8.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 9', 'Stimul': 'static\\К9.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 10', 'Stimul': 'static\\К10.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 11', 'Stimul': 'static\\К11.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 12', 'Stimul': 'static\\К12.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 13', 'Stimul': 'static\\К13.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 14', 'Stimul': 'static\\К14.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 15', 'Stimul': 'static\\К15.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 16', 'Stimul': 'static\\К16.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 17', 'Stimul': 'static\\К17.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 18', 'Stimul': 'static\\К18.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 19', 'Stimul': 'static\\К19.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 20', 'Stimul': 'static\\К20.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 21', 'Stimul': 'static\\К21.jpg', 'Color': 'Purple'}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
    Routine trial
  LoopTerminator trials_2
  Routine Pause2
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = Stimul_3_1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Name': 'Purple 1', 'Stimul': 'static\\К1.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 2', 'Stimul': 'static\\К2.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 3', 'Stimul': 'static\\К3.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 7', 'Stimul': 'static\\К7.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 8', 'Stimul': 'static\\К8.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 9', 'Stimul': 'static\\К9.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 10', 'Stimul': 'static\\К10.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 11', 'Stimul': 'static\\К11.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 12', 'Stimul': 'static\\К12.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 16', 'Stimul': 'static\\К16.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 17', 'Stimul': 'static\\К17.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 18', 'Stimul': 'static\\К18.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 19', 'Stimul': 'static\\К19.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 20', 'Stimul': 'static\\К20.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 21', 'Stimul': 'static\\К21.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 22', 'Stimul': 'static\\К22.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 23', 'Stimul': 'static\\К23.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 24', 'Stimul': 'static\\К24.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 25', 'Stimul': 'static\\К25.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 26', 'Stimul': 'static\\К26.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 27', 'Stimul': 'static\\К27.jpg', 'Color': 'Purple'}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
    Routine trial
  LoopTerminator trials_3
  Routine Pause3
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = Stimul_4_1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Name': 'Purple 1', 'Stimul': 'static\\К1.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 2', 'Stimul': 'static\\К2.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 9', 'Stimul': 'static\\К9.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 10', 'Stimul': 'static\\К10.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 11', 'Stimul': 'static\\К11.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 12', 'Stimul': 'static\\К12.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 16', 'Stimul': 'static\\К16.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 17', 'Stimul': 'static\\К17.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 18', 'Stimul': 'static\\К18.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 19', 'Stimul': 'static\\К19.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 26', 'Stimul': 'static\\К26.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 27', 'Stimul': 'static\\К27.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 28', 'Stimul': 'static\\К28.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 29', 'Stimul': 'static\\К29.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 33', 'Stimul': 'static\\К33.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 34', 'Stimul': 'static\\К34.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 35', 'Stimul': 'static\\К35.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 36', 'Stimul': 'static\\К36.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 37', 'Stimul': 'static\\К37.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 38', 'Stimul': 'static\\К38.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 43', 'Stimul': 'static\\К43.jpg', 'Color': 'Purple'}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
    Routine trial
  LoopTerminator trials_4
  Routine Pause4
  LoopInitiator trials_5 loopType="TrialHandler"
    conditionsFile = Stimul_5_1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Name': 'Purple 1', 'Stimul': 'static\\К1.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 10', 'Stimul': 'static\\К10.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 11', 'Stimul': 'static\\К11.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 12', 'Stimul': 'static\\К12.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 18', 'Stimul': 'static\\К18.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 19', 'Stimul': 'static\\К19.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 26', 'Stimul': 'static\\К26.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 27', 'Stimul': 'static\\К27.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 28', 'Stimul': 'static\\К28.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 29', 'Stimul': 'static\\К29.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 37', 'Stimul': 'static\\К37.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 38', 'Stimul': 'static\\К38.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 43', 'Stimul': 'static\\К43.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 44', 'Stimul': 'static\\К44.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 45', 'Stimul': 'static\\К45.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 50', 'Stimul': 'static\\К50.jpg', 'Color': 'Purple'},
      {'Name': 'Blue 1', 'Stimul': 'static\\К51.jpg', 'Color': 'Blue'},
      {'Name': 'Blue 2', 'Stimul': 'static\\К52.jpg', 'Color': 'Blue'},
      {'Name': 'Blue 3', 'Stimul': 'static\\К53.jpg', 'Color': 'Blue'},
      {'Name': 'Blue 4', 'Stimul': 'static\\К54.jpg', 'Color': 'Blue'},
      {'Name': 'Blue 5', 'Stimul': 'static\\К55.jpg', 'Color': 'Blue'},
      {'Name': 'Blue 6', 'Stimul': 'static\\К56.jpg', 'Color': 'Blue'}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
    Routine trial
  LoopTerminator trials_5
  Routine Pause5
  LoopInitiator trials_6 loopType="TrialHandler"
    conditionsFile = Stimul_6_1.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine trial
  LoopTerminator trials_6
  Routine Pause6
  LoopInitiator trials_7 loopType="TrialHandler"
    conditionsFile = Stimul_7_1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Name': 'Purple 1', 'Stimul': 'static\\К1.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 12', 'Stimul': 'static\\К12.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 18', 'Stimul': 'static\\К18.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 37', 'Stimul': 'static\\К37.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 38', 'Stimul': 'static\\К38.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 45', 'Stimul': 'static\\К45.jpg', 'Color': 'Purple'},
      {'Name': 'Blue 1', 'Stimul': 'static\\К51.jpg', 'Color': 'Blue'},
      {'Name': 'Blue 2', 'Stimul': 'static\\К52.jpg', 'Color': 'Blue'},
      {'Name': 'Blue 3', 'Stimul': 'static\\К53.jpg', 'Color': 'Blue'},
      {'Name': 'Blue 4', 'Stimul': 'static\\К54.jpg', 'Color': 'Blue'},
      {'Name': 'Blue 5', 'Stimul': 'static\\К55.jpg', 'Color': 'Blue'},
      {'Name': 'Blue 6', 'Stimul': 'static\\К56.jpg', 'Color': 'Blue'},
      {'Name': 'Blue 7', 'Stimul': 'static\\К57.jpg', 'Color': 'Blue'},
      {'Name': 'Blue 8', 'Stimul': 'static\\К58.jpg', 'Color': 'Blue'},
      {'Name': 'Blue 9', 'Stimul': 'static\\К59.jpg', 'Color': 'Blue'},
      {'Name': 'Blue 10', 'Stimul': 'static\\К60.jpg', 'Color': 'Blue'},
      {'Name': 'Blue 11', 'Stimul': 'static\\К61.jpg', 'Color': 'Blue'},
      {'Name': 'Blue 12', 'Stimul': 'static\\К62.jpg', 'Color': 'Blue'},
      {'Name': 'Blue 13', 'Stimul': 'static\\К63.jpg', 'Color': 'Blue'},
      {'Name': 'Blue 14', 'Stimul': 'static\\К64.jpg', 'Color': 'Blue'},
      {'Name': 'Blue 15', 'Stimul': 'static\\К65.jpg', 'Color': 'Blue'},
      {'Name': 'Blue 16', 'Stimul': 'static\\К66.jpg', 'Color': 'Blue'}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
    Routine trial
  LoopTerminator trials_7
  Routine Pause7
  LoopInitiator trials_8 loopType="TrialHandler"
    conditionsFile = Stimul_8_1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Name': 'Purple 1', 'Stimul': 'static\\К1.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 12', 'Stimul': 'static\\К12.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 18', 'Stimul': 'static\\К18.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 37', 'Stimul': 'static\\К37.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 38', 'Stimul': 'static\\К38.jpg', 'Color': 'Purple'},
      {'Name': 'Purple 45', 'Stimul': 'static\\К45.jpg', 'Color': 'Purple'},
      {'Name': 'Blue 1', 'Stimul': 'static\\К51.jpg', 'Color': 'Blue'},
      {'Name': 'Blue 2', 'Stimul': 'static\\К52.jpg', 'Color': 'Blue'},
      {'Name': 'Blue 3', 'Stimul': 'static\\К53.jpg', 'Color': 'Blue'},
      {'Name': 'Blue 4', 'Stimul': 'static\\К54.jpg', 'Color': 'Blue'},
      {'Name': 'Blue 5', 'Stimul': 'static\\К55.jpg', 'Color': 'Blue'},
      {'Name': 'Blue 6', 'Stimul': 'static\\К56.jpg', 'Color': 'Blue'},
      {'Name': 'Blue 7', 'Stimul': 'static\\К57.jpg', 'Color': 'Blue'},
      {'Name': 'Blue 8', 'Stimul': 'static\\К58.jpg', 'Color': 'Blue'},
      {'Name': 'Blue 9', 'Stimul': 'static\\К59.jpg', 'Color': 'Blue'},
      {'Name': 'Blue 10', 'Stimul': 'static\\К60.jpg', 'Color': 'Blue'},
      {'Name': 'Blue 11', 'Stimul': 'static\\К61.jpg', 'Color': 'Blue'},
      {'Name': 'Blue 12', 'Stimul': 'static\\К62.jpg', 'Color': 'Blue'},
      {'Name': 'Blue 13', 'Stimul': 'static\\К63.jpg', 'Color': 'Blue'},
      {'Name': 'Blue 14', 'Stimul': 'static\\К64.jpg', 'Color': 'Blue'},
      {'Name': 'Blue 15', 'Stimul': 'static\\К65.jpg', 'Color': 'Blue'},
      {'Name': 'Blue 16', 'Stimul': 'static\\К66.jpg', 'Color': 'Blue'}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
    Routine trial
  LoopTerminator trials_8
  Routine Exit
